PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = bp_cv_pretest
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent leftPhoneme
      text [set every repeat] = $optionLeft
      durationEstim = 2
      pos = [-0.5, 0]
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent rightPhoneme
      text [set every repeat] = $optionRight
      durationEstim = 2
      pos = [0.5, 0]
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    SoundComponent cvSound
      sound [set every repeat] = $wavFile
      durationEstim = 1.5
      startVal [time (s)] = 1
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    KeyboardComponent trialResp
      durationEstim = 1.5
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 1
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  Routine expEnd
    TextComponent endText
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The experiment is now over.

        Thank you for your participation.

        The experimentor will be with you soon.
    KeyboardComponent endResp
      durationEstim = 10
      forceEndRoutine = True
      allowedKeys = 'q'
      startVal [time (s)] = 0.0
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  Routine blockBreak
    TextComponent isBlock
      text = This is block:
      durationEstim = 10
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blockText
      text [set every frame] = $blockNo
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent pressCont
      text = Press any button to continue
      durationEstim = 10
      pos = [0, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent blockResp
      durationEstim = 10
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space','1','2'
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructionText
      text = These are the instructions
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instructionResp
      forceEndRoutine = True
      allowedKeys = 'enter','1','2'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = stimConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'idx': 1, u'optionRight': u'T', u'blockNo': 1, u'optionLeft': u'P', u'stimNo': 1, u'continuumNo': 1, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/1_pai_tai_1.wav'},
      {u'idx': 22, u'optionRight': u'P', u'blockNo': 1, u'optionLeft': u'T', u'stimNo': 2, u'continuumNo': 11, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/2_toh_poh_11.wav'},
      {u'idx': 2, u'optionRight': u'T', u'blockNo': 2, u'optionLeft': u'P', u'stimNo': 1, u'continuumNo': 2, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/1_pai_tai_2.wav'},
      {u'idx': 12, u'optionRight': u'P', u'blockNo': 2, u'optionLeft': u'T', u'stimNo': 2, u'continuumNo': 1, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/2_toh_poh_1.wav'},
      {u'idx': 3, u'optionRight': u'T', u'blockNo': 3, u'optionLeft': u'P', u'stimNo': 1, u'continuumNo': 3, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/1_pai_tai_3.wav'}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
    Routine trial
  LoopTerminator block1
  Routine blockBreak
  LoopInitiator block2 loopType="TrialHandler"
    conditionsFile = stimConditions.xlsx
    loopType = random
    nReps = 1
    Selected rows = 5
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    conditions:
      [{u'idx': 1, u'optionRight': u'T', u'blockNo': 1, u'optionLeft': u'P', u'stimNo': 1, u'continuumNo': 1, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/1_pai_tai_1.wav'},
      {u'idx': 22, u'optionRight': u'P', u'blockNo': 1, u'optionLeft': u'T', u'stimNo': 2, u'continuumNo': 11, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/2_toh_poh_11.wav'},
      {u'idx': 2, u'optionRight': u'T', u'blockNo': 2, u'optionLeft': u'P', u'stimNo': 1, u'continuumNo': 2, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/1_pai_tai_2.wav'},
      {u'idx': 12, u'optionRight': u'P', u'blockNo': 2, u'optionLeft': u'T', u'stimNo': 2, u'continuumNo': 1, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/2_toh_poh_1.wav'},
      {u'idx': 3, u'optionRight': u'T', u'blockNo': 3, u'optionLeft': u'P', u'stimNo': 1, u'continuumNo': 3, u'wavFile': u'/Users/lauragwilliams/Documents/experiments/b_p/BP_amb_phon/pre_tests/CV_categorisation/experiment_files/stimuli_wav/1_pai_tai_3.wav'}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
    Routine trial
  LoopTerminator block2
  Routine expEnd
